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System:Additional%20Connections int OperatorBackLink= 1 1 0 1 // Send final state and signal information to Operator (boolean)
Source:Signal%20Properties:DataIOFilter int SourceCh= 66 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:DataIOFilter int SampleBlockSize= 128 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:DataIOFilter int SamplingRate= 256Hz 256Hz 1 % // sample rate
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 66 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 66 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 0.03125 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0.03125 0.003 % % // gain for each channel (A/D units -> muV)
Source:Signal%20Properties:DataIOFilter list ChannelNames= 0 // list of channel names
Storage:Data%20Location:DataIOFilter string DataDirectory= ..\data\Transfer%20Experiment%20Data\RSVP%20Sessions ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= Sub_XX Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 01 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Source:Biosemi2ADC intlist EEGChList= 66 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 19 20 21 22 23 24 25 26 27 28 29 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258 % 1 % // list of physical channel indices for the EEG channels in use
Source:Biosemi2ADC intlist AIBChList= 0 % 1 32 // list of Auxiliary Input Box channels to acquire after the EEG channels (included in the SourceCh total)
Source:Biosemi2ADC intlist TriggerChList= 0 % 0 16 // list of one-bit trigger channels to append to the end (included in the SourceCh total) or a single 0 to acquire all trigger channels as a single 16-bit channel
Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Source%20Filter:SourceFilter int NotchFilter= 2 0 0 2 // Power line notch filter: 0: disabled, 1: at 50Hz, 2: at 60Hz (enumeration)
Source:Source%20Filter:SourceFilter int HighPassFilter= 2 0 0 2 // Source high pass filter: 0: disabled, 1: at 0.1Hz, 2: at 1Hz (enumeration)
Source:Source%20Filter:SourceFilter int LowPassFilter= 2 0 0 4 // Source low pass filter: 0: disabled, 1: at 9Hz, 2: at 30Hz, 3: at 40Hz, 4: at 70Hz (enumeration)
Source:Alignment:AlignmentFilter int AlignChannels= 0 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 20 13 50 32 48 38 27 64 29 21 58 23 60 26 63 25 62 30 31 65 66 // list of transmitted channels
System:Additional%20Connections:EventLink int EventLink= 1 1 0 1 // Send events from Operator to Source module (boolean)
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System:Configuration matrix SignalSourceFilterChain= 9 { Filter%20Name Position%20String } DataIOFilter 0 Biosemi2ADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 SourceFilter 1.01 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Application%20Window:ApplicationWindow int WindowWidth= 1920 640 0 % // width of Application window
Application:Application%20Window:ApplicationWindow int WindowHeight= 1080 480 0 % // height of Application window
Application:Application%20Window:ApplicationWindow int WindowLeft= 1920 0 % % // screen coordinate of Application window's left edge
Application:Application%20Window:ApplicationWindow int WindowTop= 0 0 % % // screen coordinate of Application window's top edge
Application:Application%20Window:ApplicationWindow string WindowBackgroundColor= 0x505050 0x505050 % % // Application window background color (color)
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Visualize:Application%20Log:ApplicationBase int ShowAppLog= 1 0 0 1 // Show application log window (boolean)
Application:Sequencing:StimulusTask float PreRunDuration= 2s 1 0 % // pause preceding first sequence
Application:Sequencing:StimulusTask float PostRunDuration= 1s 0 0 % // pause following last sequence
Application:Sequencing:StimulusTask float PreSequenceDuration= 1s 2s 0 % // pause preceding sequences/sets of intensifications
Application:Sequencing:StimulusTask float PostSequenceDuration= 0s 2s 0 % // pause following sequences/sets of intensifications
Application:Sequencing:StimulusTask float StimulusDuration= 500ms 40ms 0 % // stimulus duration
Application:Sequencing:StimulusTask float ISIMinDuration= 0ms 80ms 0 % // minimum duration of inter-stimulus interval
Application:Sequencing:StimulusTask float ISIMaxDuration= 0ms 80ms 0 % // maximum duration of inter-stimulus interval
Application:Result%20Processing:StimulusTask int InterpretMode= 0 0 0 2 // interpretation of results: 0 none, 1 online free mode, 2 copy mode (enumeration)
Application:Result%20Processing:StimulusTask int DisplayResults= 0 1 0 1 // display results of copy/free spelling (boolean)
Application:Sequencing:StimulusPresentationTask intlist Sequence= 120 60 193 91 25 177 98 168 230 28 40 103 208 143 217 145 156 94 134 127 48 140 54 232 138 191 198 101 104 46 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212 236 38 117 // Sequence in which stimuli are presented (deterministic mode)/ Stimulus frequencies for each stimulus (random mode)/ Ignored (P3Speller compatible mode)
Application:Sequencing:StimulusPresentationTask int SequenceType= 0 0 0 2 // Sequence of stimuli is 0 deterministic, 1 random, 2 P3Speller compatible (enumeration)
Application:Sequencing:StimulusPresentationTask int NumberOfSequences= 1 1 0 % // number of sequence repetitions
Application:Sequencing:StimulusPresentationTask intlist ToBeCopied= 0 1 1 % // Sequence in which stimuli need to be copied (only used in copy mode)
Application:Sequencing:StimulusPresentationTask string UserComment= % // User comments for a specific run
Application:Stimuli:StimulusPresentationTask matrix Stimuli= { StimulusDuration icon } { stimulus1 stimulus2 stimulus3 stimulus4 stimulus5 stimulus6 stimulus7 stimulus8 stimulus9 stimulus10 stimulus11 stimulus12 stimulus13 stimulus14 stimulus15 stimulus16 stimulus17 stimulus18 stimulus19 stimulus20 stimulus21 stimulus22 stimulus23 stimulus24 stimulus25 stimulus26 stimulus27 stimulus28 stimulus29 stimulus30 stimulus31 stimulus32 stimulus33 stimulus34 stimulus35 stimulus36 stimulus37 stimulus38 stimulus39 stimulus40 stimulus41 stimulus42 stimulus43 stimulus44 stimulus45 stimulus46 stimulus47 stimulus48 stimulus49 stimulus50 stimulus51 stimulus52 stimulus53 stimulus54 stimulus55 stimulus56 stimulus57 stimulus58 stimulus59 stimulus60 stimulus61 stimulus62 stimulus63 stimulus64 stimulus65 stimulus66 stimulus67 stimulus68 stimulus69 stimulus70 stimulus71 stimulus72 stimulus73 stimulus74 stimulus75 stimulus76 stimulus77 stimulus78 stimulus79 stimulus80 stimulus81 stimulus82 stimulus83 stimulus84 stimulus85 stimulus86 stimulus87 stimulus88 stimulus89 stimulus90 stimulus91 stimulus92 stimulus93 stimulus94 stimulus95 stimulus96 stimulus97 stimulus98 stimulus99 stimulus100 stimulus101 stimulus102 stimulus103 stimulus104 stimulus105 stimulus106 stimulus107 stimulus108 stimulus109 stimulus110 stimulus111 stimulus112 stimulus113 stimulus114 stimulus115 stimulus116 stimulus117 stimulus118 stimulus119 stimulus120 stimulus121 stimulus122 stimulus123 stimulus124 stimulus125 stimulus126 stimulus127 stimulus128 stimulus129 stimulus130 stimulus131 stimulus132 stimulus133 stimulus134 stimulus135 stimulus136 stimulus137 stimulus138 stimulus139 stimulus140 stimulus141 stimulus142 stimulus143 stimulus144 stimulus145 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images/237.bmp images/238.bmp images/239.bmp images/240.bmp // captions and icons to be displayed, sounds to be played for different stimuli
Application:Stimuli:StimulusPresentationTask matrix FocusOn= { caption icon audio } { focuson } Please%20focus%20on images/focuson.bmp sounds/uh-uh.wav // initial announcement what to focus on
Application:Stimuli:StimulusPresentationTask matrix Result= { caption icon audio } { result } The%20result%20was images/result.bmp sounds/uh-uh.wav // final result announcement 
Application:Stimuli:StimulusPresentationTask int StimulusWidth= 100 0 0 100 // StimulusWidth in percent of screen width (zero for original pixel size)
Application:Stimuli:StimulusPresentationTask int CaptionHeight= 10 0 0 100 // Height of stimulus caption text in percent of screen height
Application:Stimuli:StimulusPresentationTask string CaptionColor= 0x004040 0x00FFFFFF 0x00000000 0xFFFFFFFF // Color of stimulus caption text (color)
Application:Stimuli:StimulusPresentationTask string BackgroundColor= 0x80FF00 0x00FFFF00 0x00000000 0xFFFFFFFF // Color of stimulus background (color)
Application:Stimuli:StimulusPresentationTask int CaptionSwitch= 0 1 0 1 // Present captions (boolean)
Application:Stimuli:StimulusPresentationTask int IconSwitch= 1 1 0 1 // Present icon files (boolean)
Application:Stimuli:StimulusPresentationTask int AudioSwitch= 0 1 0 1 // Present audio files (boolean)
Application:Stimuli:StimulusPresentationTask float AudioVolume= 100 100 0 100 // Volume for audio playback in percent
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes, empty for off
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
Application:Localization:Localization string Language= Default Default % % // Language for user messages
Application:Localization:Localization matrix LocalizedStrings= { German } { TIME%20OUT%20!!! Waiting%20to%20start%20... } Zeit%20abgelaufen! Warte%20... // Localized user messages
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System:Configuration matrix ApplicationFilterChain= 4 { Filter%20Name Position%20String } ConnectorInput 2.9999 StimulusPresentationTask 3 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain
Filtering:P3TemporalFilter int EpochLength= 500ms 500ms 0 % // Length of data epoch from stimulus onset
Filtering:P3TemporalFilter int EpochsToAverage= 1 1 0 % // Number of epochs to average
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Visualize:P3TemporalFilter int TargetERPChannel= 1 1 % % // Input channel for which to display ERP data
System:Command%20Line%20Arguments variant MatlabWD= ./matlab_RSVP ./matlab_RSVP ./matlab_RSVP ./matlab_RSVP 
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System:Configuration matrix SignalProcessingFilterChain= 2 { Filter%20Name Position%20String } MatlabFilter 2.A P3TemporalFilter 2.B // SignalProcessing filter chain
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System:Randomization int RandomSeed= 2812 0 % % // seed for the BCI2000 pseudo random number generator
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
